CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>.*)_[0-9]{2}_[0-9]_(?P<Tile>.*)_(?P<Channel>.*)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:HA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:Virus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.30
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:HA
    Name the primary objects to be identified:Tnfx
    Typical diameter of objects, in pixel units (Min,Max):25,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.23,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:7|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
    Select the input image:Virus
    Name the output image:VP35Th
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.15,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

Watershed:[module_num:8|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
    Select the input image:VP35Th
    Name the output object:VP35Morph
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:75
    Downsample:1
    Separate watershed labels:No

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBound
    Select the method to identify the secondary objects:Distance - N
    Select the input image:VP35Th
    Number of pixels by which to expand the primary objects:25
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
RelateObjects:[module_num:10|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
    Parent objects:CellBound
    Child objects:VP35Morph
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InfCells
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
RelateObjects:[module_num:11|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
    Parent objects:Tnfx
    Child objects:VP35Morph
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InfTnfxCells
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
RelateObjects:[module_num:12|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
    Parent objects:VP35Morph
    Child objects:CellBound
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:InfCells2
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
MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Nuclei, VP35Morph

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Tnfx,Image|Count_Nuclei,Image|Count_InfCells,Image|Count_VP35Morph,Image|Count_InfTnfxCells,Image|Metadata_Channel,Image|Metadata_Tile,Image|Metadata_Well,Image|AreaOccupied_AreaOccupied_Nuclei,Image|AreaOccupied_AreaOccupied_VP35Morph,Image|AreaOccupied_TotalArea_VP35Morph,Image|AreaOccupied_TotalArea_Nuclei
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DNR1_HAandVP35_V2
    Overwrite existing files without warning?:No
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