CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>.*)_[0-9]{2}_[0-9]_(?P<Tile>.*)_(?P<Channel>.*)_
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Date>.*)_(?P<Plate>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:FISH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:Nuc
    Name the output image:NucTh
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.16
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
MeasureImageAreaOccupied:[module_num:6|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:NucTh
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
MeasureImageIntensity:[module_num:7|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
    Select images to measure:Nuc
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Threshold:[module_num:8|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
    Select the input image:FISH
    Name the output image:FISH_Th
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.313
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
MeasureImageAreaOccupied:[module_num:9|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:FISH_Th
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
MeasureImageIntensity:[module_num:10|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
    Select images to measure:FISH
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_NucTh,Image|AreaOccupied_AreaOccupied_FISH_Th,Image|AreaOccupied_TotalArea_NucTh,Image|AreaOccupied_TotalArea_FISH_Th,Image|Intensity_MaxIntensity_Nuc,Image|Intensity_MaxIntensity_FISH,Image|Intensity_TotalIntensity_FISH,Image|Intensity_TotalIntensity_Nuc,Image|Intensity_MinIntensity_FISH,Image|Intensity_MinIntensity_Nuc,Image|Intensity_MeanIntensity_Nuc,Image|Intensity_MeanIntensity_FISH,Image|Metadata_Channel,Image|Metadata_Plate,Image|Metadata_Well,Image|Metadata_Tile
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:HeLa_EDC4KD_Rep6
    Overwrite existing files without warning?:No
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